<?xml version='1.0' encoding='UTF-8'?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" name="larsen_2010">
  <units name="A_per_F">
    <unit units="gram" multiplier="1000"/>
    <unit units="metre" exponent="2.0"/>
    <unit units="second" exponent="-4.0"/>
    <unit units="ampere" exponent="-1.0"/>
  </units>
  <units name="C_per_mol">
    <unit units="second"/>
    <unit units="ampere"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="mJ_per_mol_per_K">
    <unit units="gram"/>
    <unit units="metre" exponent="2.0"/>
    <unit units="second" exponent="-2.0"/>
    <unit units="kelvin" exponent="-1.0"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="mS_per_uF">
    <unit units="second" exponent="-1.0" multiplier="1000"/>
  </units>
  <units name="mV">
    <unit units="gram"/>
    <unit units="metre" exponent="2.0"/>
    <unit units="second" exponent="-3.0"/>
    <unit units="ampere" exponent="-1.0"/>
  </units>
  <units name="mmol">
    <unit units="mole" multiplier="0.001"/>
  </units>
  <units name="ms">
    <unit units="second" multiplier="0.001"/>
  </units>
  <units name="per_mV">
    <unit units="gram" exponent="-1.0"/>
    <unit units="metre" exponent="-2.0"/>
    <unit units="second" exponent="3.0"/>
    <unit units="ampere"/>
  </units>
  <component name="IKr">
    <variable name="E_K" units="mV" public_interface="in"/>
    <variable name="K_o" units="mmol" public_interface="in"/>
    <variable name="Or4" units="dimensionless" public_interface="in"/>
    <variable name="T" units="kelvin" public_interface="in"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="g_Kr_0" units="mS_per_uF" initial_value="0.024"/>
    <variable name="g_max" units="mS_per_uF"/>
    <variable name="i_Kr" units="A_per_F" public_interface="out"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>g_max</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <ci>g_Kr_0</ci>
            <apply>
              <minus/>
              <apply>
                <divide/>
                <ci>T</ci>
                <cn cellml:units="kelvin">35.0</cn>
              </apply>
              <apply>
                <divide/>
                <cn cellml:units="dimensionless">55.0</cn>
                <cn cellml:units="dimensionless">7.0</cn>
              </apply>
            </apply>
          </apply>
          <apply>
            <root/>
            <apply>
              <divide/>
              <ci>K_o</ci>
              <cn cellml:units="mmol">5.4</cn>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>i_Kr</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <ci>g_max</ci>
            <ci>Or4</ci>
          </apply>
          <apply>
            <minus/>
            <ci>V</ci>
            <ci>E_K</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="cell">
    <variable name="V" units="mV" public_interface="out"/>
    <variable name="duration" units="ms" initial_value="1000.0"/>
    <variable name="offset" units="ms" initial_value="0.0"/>
    <variable name="period" units="ms" initial_value="1000.0"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>V</ci>
        <piecewise>
          <piece>
            <cn cellml:units="mV">40.0</cn>
            <apply>
              <lt/>
              <apply>
                <minus/>
                <apply>
                  <minus/>
                  <ci>time</ci>
                  <ci>offset</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>period</ci>
                  <apply>
                    <floor/>
                    <apply>
                      <divide/>
                      <apply>
                        <minus/>
                        <ci>time</ci>
                        <ci>offset</ci>
                      </apply>
                      <ci>period</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <ci>duration</ci>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="mV">0.0</cn>
          </otherwise>
        </piecewise>
      </apply>
    </math>
  </component>
  <component name="environment">
    <variable name="F" units="C_per_mol" public_interface="out" initial_value="96485.0"/>
    <variable name="IKr" units="A_per_F"/>
    <variable name="K_i" units="mmol" public_interface="out" initial_value="141.0167"/>
    <variable name="K_o" units="mmol" public_interface="out" initial_value="4.0"/>
    <variable name="R" units="mJ_per_mol_per_K" public_interface="out" initial_value="8315.0"/>
    <variable name="T" units="kelvin" public_interface="out" initial_value="296.0"/>
    <variable name="i_Kr" units="A_per_F" public_interface="in"/>
    <variable name="time" units="ms" public_interface="out"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>IKr</ci>
        <ci>i_Kr</ci>
      </apply>
    </math>
  </component>
  <component name="iKr_Markov">
    <variable name="Cr1" units="dimensionless" initial_value="0.9786"/>
    <variable name="Cr2" units="dimensionless" initial_value="0.0031"/>
    <variable name="Cr3" units="dimensionless" initial_value="0.0029"/>
    <variable name="Ir5" units="dimensionless" initial_value="0.0014"/>
    <variable name="K_o" units="mmol" public_interface="in"/>
    <variable name="Or4" units="dimensionless" public_interface="out" initial_value="0.014"/>
    <variable name="T" units="kelvin" public_interface="in"/>
    <variable name="T_Base" units="kelvin" initial_value="310.0"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha3Scale" units="dimensionless"/>
    <variable name="alpha_xr1" units="mS_per_uF"/>
    <variable name="alpha_xr2" units="mS_per_uF"/>
    <variable name="alpha_xr3" units="mS_per_uF"/>
    <variable name="alpha_xr4" units="mS_per_uF"/>
    <variable name="beta3Scale" units="dimensionless"/>
    <variable name="beta4Scale" units="dimensionless"/>
    <variable name="beta_xr1" units="mS_per_uF"/>
    <variable name="beta_xr2" units="mS_per_uF"/>
    <variable name="beta_xr3" units="mS_per_uF"/>
    <variable name="beta_xr4" units="mS_per_uF"/>
    <variable name="hERG1b" units="dimensionless" initial_value="0.0"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cr1</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>beta_xr1</ci>
            <ci>Cr2</ci>
          </apply>
          <apply>
            <times/>
            <ci>alpha_xr1</ci>
            <ci>Cr1</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cr2</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>alpha_xr1</ci>
              <ci>Cr1</ci>
            </apply>
            <apply>
              <times/>
              <ci>beta_xr2</ci>
              <ci>Cr3</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci>alpha_xr2</ci>
              <ci>beta_xr1</ci>
            </apply>
            <ci>Cr2</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cr3</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>alpha_xr2</ci>
              <ci>Cr2</ci>
            </apply>
            <apply>
              <times/>
              <ci>beta_xr3</ci>
              <ci>Or4</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci>alpha_xr3</ci>
              <ci>beta_xr2</ci>
            </apply>
            <ci>Cr3</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Ir5</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_xr4</ci>
            <ci>Or4</ci>
          </apply>
          <apply>
            <times/>
            <ci>beta_xr4</ci>
            <ci>Ir5</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Or4</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <ci>alpha_xr3</ci>
              <ci>Cr3</ci>
            </apply>
            <apply>
              <times/>
              <ci>beta_xr4</ci>
              <ci>Ir5</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <plus/>
              <ci>alpha_xr4</ci>
              <ci>beta_xr3</ci>
            </apply>
            <ci>Or4</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>alpha3Scale</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">0.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.5</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">20.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.5</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">40.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.5</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">60.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.5</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">80.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.5</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">100.0</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">1.0</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>alpha_xr1</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <apply>
                <times/>
                <ci>alpha3Scale</ci>
                <cn cellml:units="mS_per_uF">1.0</cn>
              </apply>
              <ci>T</ci>
            </apply>
            <ci>T_Base</ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">24.335</cn>
              <apply>
                <times/>
                <apply>
                  <divide/>
                  <ci>T_Base</ci>
                  <ci>T</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <cn cellml:units="per_mV">0.0112</cn>
                    <ci>V</ci>
                  </apply>
                  <cn cellml:units="dimensionless">25.914</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>alpha_xr2</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn cellml:units="mS_per_uF">1.0</cn>
              <ci>T</ci>
            </apply>
            <ci>T_Base</ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">22.746</cn>
              <apply>
                <times/>
                <apply>
                  <divide/>
                  <ci>T_Base</ci>
                  <ci>T</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <cn cellml:units="per_mV">0.0</cn>
                    <ci>V</ci>
                  </apply>
                  <cn cellml:units="dimensionless">25.914</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>alpha_xr3</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn cellml:units="mS_per_uF">1.0</cn>
              <ci>T</ci>
            </apply>
            <ci>T_Base</ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">22.098</cn>
              <apply>
                <times/>
                <apply>
                  <divide/>
                  <ci>T_Base</ci>
                  <ci>T</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <cn cellml:units="per_mV">0.0365</cn>
                    <ci>V</ci>
                  </apply>
                  <cn cellml:units="dimensionless">25.914</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>alpha_xr4</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <cn cellml:units="mS_per_uF">1.0</cn>
                <ci>T</ci>
              </apply>
              <ci>T_Base</ci>
            </apply>
            <apply>
              <exp/>
              <apply>
                <plus/>
                <cn cellml:units="dimensionless">30.016</cn>
                <apply>
                  <times/>
                  <apply>
                    <divide/>
                    <ci>T_Base</ci>
                    <ci>T</ci>
                  </apply>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <cn cellml:units="per_mV">0.0223</cn>
                      <ci>V</ci>
                    </apply>
                    <cn cellml:units="dimensionless">30.888</cn>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <power/>
            <apply>
              <divide/>
              <cn cellml:units="mmol">5.4</cn>
              <ci>K_o</ci>
            </apply>
            <cn cellml:units="dimensionless">0.4</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta3Scale</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">0.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">3.8</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">20.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">5.5</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">40.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">6.4</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">60.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">9.4</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">80.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">14.0</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">100.0</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">1.0</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>beta4Scale</ci>
        <piecewise>
          <piece>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">0.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.3</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">20.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.6</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">40.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.6</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">60.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">1.9</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">80.0</cn>
            </apply>
          </piece>
          <piece>
            <cn cellml:units="dimensionless">2.1</cn>
            <apply>
              <eq/>
              <ci>hERG1b</ci>
              <cn cellml:units="dimensionless">100.0</cn>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="dimensionless">1.0</cn>
          </otherwise>
        </piecewise>
      </apply>
      <apply>
        <eq/>
        <ci>beta_xr1</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn cellml:units="mS_per_uF">1.0</cn>
              <ci>T</ci>
            </apply>
            <ci>T_Base</ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">13.688</cn>
              <apply>
                <times/>
                <apply>
                  <divide/>
                  <ci>T_Base</ci>
                  <ci>T</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <apply>
                      <minus/>
                      <cn cellml:units="per_mV">0.0603</cn>
                    </apply>
                    <ci>V</ci>
                  </apply>
                  <cn cellml:units="dimensionless">15.707</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_xr2</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <cn cellml:units="mS_per_uF">1.0</cn>
              <ci>T</ci>
            </apply>
            <ci>T_Base</ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">13.193</cn>
              <apply>
                <times/>
                <apply>
                  <divide/>
                  <ci>T_Base</ci>
                  <ci>T</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <cn cellml:units="per_mV">0.0</cn>
                    <ci>V</ci>
                  </apply>
                  <cn cellml:units="dimensionless">15.707</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_xr3</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <apply>
                <times/>
                <ci>beta3Scale</ci>
                <cn cellml:units="mS_per_uF">1.0</cn>
              </apply>
              <ci>T</ci>
            </apply>
            <ci>T_Base</ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">7.313</cn>
              <apply>
                <times/>
                <apply>
                  <divide/>
                  <ci>T_Base</ci>
                  <ci>T</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <apply>
                      <minus/>
                      <cn cellml:units="per_mV">0.0399</cn>
                    </apply>
                    <ci>V</ci>
                  </apply>
                  <cn cellml:units="dimensionless">15.707</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_xr4</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <apply>
                <times/>
                <ci>beta4Scale</ci>
                <cn cellml:units="mS_per_uF">1.0</cn>
              </apply>
              <ci>T</ci>
            </apply>
            <ci>T_Base</ci>
          </apply>
          <apply>
            <exp/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">30.061</cn>
              <apply>
                <times/>
                <apply>
                  <divide/>
                  <ci>T_Base</ci>
                  <ci>T</ci>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <apply>
                      <minus/>
                      <cn cellml:units="per_mV">0.0312</cn>
                    </apply>
                    <ci>V</ci>
                  </apply>
                  <cn cellml:units="dimensionless">33.243</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="reversal_potentials">
    <variable name="E_K" units="mV" public_interface="out"/>
    <variable name="F" units="C_per_mol" public_interface="in"/>
    <variable name="K_i" units="mmol" public_interface="in"/>
    <variable name="K_o" units="mmol" public_interface="in"/>
    <variable name="R" units="mJ_per_mol_per_K" public_interface="in"/>
    <variable name="T" units="kelvin" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>E_K</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <apply>
              <times/>
              <ci>R</ci>
              <ci>T</ci>
            </apply>
            <ci>F</ci>
          </apply>
          <apply>
            <ln/>
            <apply>
              <divide/>
              <ci>K_o</ci>
              <ci>K_i</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <connection>
    <map_components component_1="IKr" component_2="cell"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="IKr" component_2="environment"/>
    <map_variables variable_1="K_o" variable_2="K_o"/>
    <map_variables variable_1="T" variable_2="T"/>
    <map_variables variable_1="i_Kr" variable_2="i_Kr"/>
  </connection>
  <connection>
    <map_components component_1="IKr" component_2="iKr_Markov"/>
    <map_variables variable_1="Or4" variable_2="Or4"/>
  </connection>
  <connection>
    <map_components component_1="IKr" component_2="reversal_potentials"/>
    <map_variables variable_1="E_K" variable_2="E_K"/>
  </connection>
  <connection>
    <map_components component_1="cell" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="cell" component_2="iKr_Markov"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="iKr_Markov"/>
    <map_variables variable_1="K_o" variable_2="K_o"/>
    <map_variables variable_1="T" variable_2="T"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="environment" component_2="reversal_potentials"/>
    <map_variables variable_1="F" variable_2="F"/>
    <map_variables variable_1="K_i" variable_2="K_i"/>
    <map_variables variable_1="K_o" variable_2="K_o"/>
    <map_variables variable_1="R" variable_2="R"/>
    <map_variables variable_1="T" variable_2="T"/>
  </connection>
</model>
